PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'block order': "['color first','identity first']"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 600]
  color = 1.0000, 1.0000, 1.0000
  expName = Self_matt
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      disabled = True
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for taking part in this experiment

        press space to continue
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent goodbye_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thanks for participating! 
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    KeyboardComponent goodbye_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_name
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  Routine instructions_name
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  Routine stimulus
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    CodeComponent fix_duration_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Fixation cross duration
        fixDurMin = 0.3 # minimum: 300 ms
        fixDurMax = 1 # maximum: 700 ms
      Begin Routine:
        fixDur = np.random.uniform(fixDurMin, fixDurMax) # random between minimum and maximum
        thisExp.addData('fixation_duration',fixDur) # document the duration in your logfile
    TextComponent fix
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    TextComponent stimuli
      color [set every repeat] = $color
      font [set every repeat] = $font
      letterHeight = 0.25
      startVal [condition] = fix.status==FINISHED
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'j', 'k', 'l'
      forceEndRoutine = True
      startVal [condition] = fix.status==FINISHED
      store = first key
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  Routine instructions
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    CodeComponent assign_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 'trials_color.xlsx':
            instruction = instruct_color_condition
        if condition == 'trials_identity.xlsx':
            instruction = instruct_identity_condition
    TextComponent text_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $instruction
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    KeyboardComponent key_resp_instrucctions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine blank
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine preliminaries
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    CodeComponent assign_keymap_at_random_and_mk_instructions
      Code Type = Py
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      Begin Experiment:
        # choose one of 6 combinations of j,k,l mapping to redself; bluefriend; othergreen
        #redself   bluefriend  greenother
        #1=j              k                    l
        #2=j              l                     k
        #3=k             j                     l
        #4=k             l                     j
        #5=l              j                     k
        #6=l              k                    j

        import random
        mapping_number = random.randint(1,6)
        match mapping_number:
            case 1:
                redself    = "j"
                bluefriend = "k"
                greenother = "l"
            case 2:
                redself    = "j"
                bluefriend = "l"
                greenother = "k"
            case 3:
                redself    = "k"
                bluefriend = "j"
                greenother = "l"
            case 4:
                redself    = "k"
                bluefriend = "l"
                greenother = "j"
            case 5:
                redself    = "l"
                bluefriend = "j"
                greenother = "k"
            case 6:
                redself    = "l"
                bluefriend = "k"
                greenother = "j"
            case _:
                print("oops")

        # create strings from keymap for use in instructions
        #e.g., instr_1 = "press" + keymap1key1 + "for redself"
        instruct_color_condition = "In the following task, you will need to report the color of the word. \n- If the word is presented in blue, press " + bluefriend + "\n- If the word is presented in red, press " + redself + "\n- If the word is presented in green, press " + greenother + "\n\npress the space key to start"
        instruct_identity_condition = "In the following task, you will need to report the identity of the word.\n- If the word is self, press " + redself + "\n- If the word is friend, press " + bluefriend + "\n- If the word is other, press " + greenother + "\n\npress the space key to start"
    CodeComponent parse_block_order_from_gui
      Code Type = Py
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      Begin Routine:
        foo=['bar','daz']
        print("first block is: ", expInfo['block order'])
        if expInfo['block order'] == "color first":
            foo=['trials_color.xlsx','trials_identity.xlsx']
        if expInfo['block order'] == "identity first":
            foo=['trials_identity.xlsx','trials_color.xlsx']
        foocount=0
        condition=foo[foocount]
        print("condition is: ",condition)
    CodeComponent pull_fonts_in
      Code Type = Auto->JS
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      Begin Experiment:
        font_files = ['Arial.ttf', 'verdana.ttf', 'tahoma.ttf', 'RAVIE.ttf', 'JOKERMAN.ttf']
        font_main1 = 'Arial'
        font_main2 = 'verdana'
        font_main3 = 'tahoma'
        font_main4 = 'RAVIE'
        font_main5 = 'JOKERMAN'

        _ = visual.TextStim(win=win, font=font_main1, fontFiles=font_files)
        del _

        _ = visual.TextStim(win=win, font=font_main2, fontFiles=font_files)
        del _

        _ = visual.TextStim(win=win, font=font_main3, fontFiles=font_files)
        del _

        _ = visual.TextStim(win=win, font=font_main4, fontFiles=font_files)
        del _

        _ = visual.TextStim(win=win, font=font_main5, fontFiles=font_files)
        del _
  Routine feedback
    RoutineSettingsComponent feedback
      disabled = True
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    CodeComponent assign_feedback
      Code Type = Auto->JS
    CodeComponent conditionally_skip_feedback
      Code Type = Auto->JS
    TextComponent conditionally_put_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine pp_names_names
    RoutineSettingsComponent pp_names_names
      disabled = True
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    CodeComponent skip_for_now
      Code Type = Auto->JS
  Routine the_end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The End
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        print("The End")
  Routine font_selection_test
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    TextComponent text_title
      color = blue
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Demonstration that font selection works - remove for real runs
      wrapWidth = 1.5
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    TextComponent text1_arial
      color = black
      font [set every repeat] = $font_main1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = I am Arial abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_verdana
      color = black
      font [set every repeat] = $font_main2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = I am Verdana abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_tahoma
      color = black
      font [set every repeat] = $font_main3
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = I am Tahoma abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_ravie
      color = black
      font [set every repeat] = $font_main4
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = I am Ravie abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_jokerman
      color = black
      font [set every repeat] = $font_main5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = I am Jokerman abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text_dismiss
      color = blue
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press space to continue
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine increment_foocount
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if foocount<1:
            foocount+=1
            condition=foo[foocount]
            print("condition is: ",condition)
  Routine assign_spreadsheet
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        trial_list = condition
  Routine say_stuff
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        print("hello")
  Routine keymap_test
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        debug_string = "Demonstration that random selection of keymap works - remove for real runs\n\nRandomly selected mapping_number is " + str(mapping_number) + " of 6" + ";\nredself key is " + redself + ";\nbluefriend key is " + bluefriend + ";\ngreenother key is " + greenother + "\n\nPress any key to continue"
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $debug_string
      wrapWidth = 1.5
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine preliminaries
  Routine keymap_test
  Routine font_selection_test
  Routine welcome
  Routine pp_names_names
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition
      loopType = random
      nReps = 1
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      Routine say_stuff
      Routine stimulus
      Routine feedback
      Routine blank
    LoopTerminator trials
    Routine increment_foocount
  LoopTerminator blocks
  Routine the_end
