PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'blocks': "['colour then identity','identity then colour']", 'group': "['1','2','3','4','5','6']"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 600]
  color = 1.0000, 1.0000, 1.0000
  expName = alej_colour_self_friend_other
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine preliminaries
    RoutineSettingsComponent preliminaries
      saveStartStop = False
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    CodeComponent assign_keymap_at_random_and_mk_instructions
      Code Type = Py
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      Begin Experiment:
        # choose one of 6 combinations of j,k,l mapping to redself; bluefriend; othergreen
        #redself   bluefriend  greenother
        #1=j              k                    l
        #2=j              l                     k
        #3=k             j                     l
        #4=k             l                     j
        #5=l              j                     k
        #6=l              k                    j

        import random
        if expInfo['group']:
            mapping_number = int(expInfo['group'])
        else:
            mapping_number = random.randint(1,6)
        instruct_color_condition = "oops"
        instruct_identity_condition = "oops"
        match mapping_number:
            case 1:
                redself    = "j"
                bluefriend = "k"
                greenother = "l"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in red, press " + redself + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\nIf the word is presented in green, press " + greenother + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is self, press " + redself + \
                "\nIf the word is friend, press " + bluefriend + \
                "\nIf the word is other, press " + greenother + \
                "\n\npress the space key to start"
            case 2:
                redself    = "j"
                bluefriend = "l"
                greenother = "k"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in red, press " + redself + \
                "\nIf the word is presented in green, press " + greenother + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is self, press " + redself + \
                "\nIf the word is other, press " + greenother + \
                "\nIf the word is friend, press " + bluefriend + \
                "\n\npress the space key to start"
            case 3:
                redself    = "k"
                bluefriend = "j"
                greenother = "l"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\nIf the word is presented in red, press " + redself + \
                "\nIf the word is presented in green, press " + greenother + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is friend, press " + bluefriend + \
                "\nIf the word is self, press " + redself + \
                "\nIf the word is other, press " + greenother + \
                "\n\npress the space key to start"
            case 4:
                redself    = "k"
                bluefriend = "l"
                greenother = "j"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in green, press " + greenother + \
                "\nIf the word is presented in red, press " + redself + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is other, press " + greenother + \
                "\nIf the word is self, press " + redself + \
                "\nIf the word is friend, press " + bluefriend + \
                "\n\npress the space key to start"
            case 5:
                redself    = "l"
                bluefriend = "j"
                greenother = "k"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\nIf the word is presented in green, press " + greenother + \
                "\nIf the word is presented in red, press " + redself + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is friend, press " + bluefriend + \
                "\nIf the word is other, press " + greenother + \
                "\nIf the word is self, press " + redself + \
                "\n\npress the space key to start"
            case 6:
                redself    = "l"
                bluefriend = "k"
                greenother = "j"
                instruct_color_condition = \
                "In the following task, you will need to report the color of the word." + \
                "\nIf the word is presented in green, press " + greenother + \
                "\nIf the word is presented in blue, press " + bluefriend + \
                "\nIf the word is presented in red, press " + redself + \
                "\n\npress the space key to start"
                instruct_identity_condition = \
                "In the following task, you will need to report the identity of the word." + \
                "\nIf the word is other, press " + greenother + \
                "\nIf the word is friend, press " + bluefriend + \
                "\nIf the word is self, press " + redself + \
                "\n\npress the space key to start"
            case _:
                print("oops")
        thisExp.addData("redself", redself)
        thisExp.addData("bluefriend", bluefriend)
        thisExp.addData("greenother", greenother)
    CodeComponent parse_block_order_from_gui
      Code Type = Py
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      Begin Routine:
        order_of_conditions=[]
        print("block order is: ", expInfo['blocks'])
        if expInfo['blocks'] == "colour then identity":
            order_of_conditions=['trials_color.xlsx','trials_identity.xlsx', 'trials_color.xlsx','trials_identity.xlsx']
        if expInfo['blocks'] == "identity then colour":
            order_of_conditions=['trials_identity.xlsx','trials_color.xlsx', 'trials_identity.xlsx','trials_color.xlsx']
        print(order_of_conditions)
        condition_number = -1
    CodeComponent pull_fonts_in
      Code Type = Auto->JS
      disabled = True
      Begin Experiment:
        #font_files = ['font_ttfs/Arial.ttf', 'font_ttfs/verdana.ttf', 'font_ttfs/tahoma.ttf', 'font_ttfs/RAVIE.ttf', 'font_ttfs/JOKERMAN.ttf']
        #font_main1 = 'Arial'
        #font_main2 = 'verdana'
        #font_main3 = 'tahoma'
        #font_main4 = 'RAVIE'
        #font_main5 = 'JOKERMAN'

        #_ = visual.TextStim(win=win, font=font_main1, fontFiles=font_files)
        #del _

        #_ = visual.TextStim(win=win, font=font_main2, fontFiles=font_files)
        #del _

        #_ = visual.TextStim(win=win, font=font_main3, fontFiles=font_files)
        #del _

        #_ = visual.TextStim(win=win, font=font_main4, fontFiles=font_files)
        #del _

        #_ = visual.TextStim(win=win, font=font_main5, fontFiles=font_files)
        #del _
    CodeComponent declare_fonts
      Code Type = Auto->JS
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      Begin Routine:
        font_main1 = 'Arial'
        font_main2 = 'RAVIE'
        font_main3 = 'JOKERMAN'
        font_main4 = 'verdana'
        font_main5 = 'tahoma'
  Routine keymap_test
    RoutineSettingsComponent keymap_test
      disabled = True
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        debug_string = "Demonstration that random selection of keymap works - remove for real runs\n\nRandomly selected mapping_number is " + str(mapping_number) + " of 6" + ";\nredself key is " + redself + ";\nbluefriend key is " + bluefriend + ";\ngreenother key is " + greenother + "\n\nPress any key to continue"
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $debug_string
      wrapWidth = 1.5
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine font_selection_test
    RoutineSettingsComponent font_selection_test
      disabled = True
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    TextComponent text_title
      color = blue
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Demonstration that font selection works - remove for real runs
      wrapWidth = 1.5
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    TextComponent text1_arial
      color = black
      font [set every repeat] = $font_main1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = I am Arial abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_verdana
      color = black
      font [set every repeat] = $font_main2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = I am Verdana abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_tahoma
      color = black
      font [set every repeat] = $font_main3
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = I am Tahoma abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_ravie
      color = black
      font [set every repeat] = $font_main4
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = I am Ravie abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text1_jokerman
      color = black
      font [set every repeat] = $font_main5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = I am Jokerman abcdefghijklmnopqrstuvwxyz123
      wrapWidth = 1.5
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    TextComponent text_dismiss
      color = blue
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press space to continue
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    RoutineSettingsComponent welcome
      disabled = True
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for taking part in this experiment

        press space to continue
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pp_names_names
    RoutineSettingsComponent pp_names_names
      disabled = True
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    CodeComponent skip_for_now
      Code Type = Auto->JS
  Routine instructions
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    CodeComponent assign_instruction_text
      Code Type = Py
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      Begin Routine:
        instruction="oops"
        if condition == 'trials_color.xlsx':
            instruction = instruct_color_condition
        if condition == 'trials_identity.xlsx':
            instruction = instruct_identity_condition
    TextComponent text_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $instruction
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine goodbye
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    TextComponent goodbye_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thanks for participating! 
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    KeyboardComponent goodbye_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_name
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  Routine instructions_name
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  Routine stimulus
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    CodeComponent fix_duration_code
      Code Type = Py
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      Begin Experiment:
        # Fixation cross duration
        fixDurMin = 0.3 # minimum: 300 ms
        fixDurMax = 0.7 # maximum: 700 ms
      Begin Routine:
        fixDur = np.random.uniform(fixDurMin, fixDurMax) # random between minimum and maximum
        thisExp.addData('fixation_duration',fixDur) # document the duration in your logfile
    TextComponent fix
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    TextComponent stimuli
      color [set every repeat] = $color
      font [set every repeat] = $font
      letterHeight = 0.25
      startVal [condition] = fix.status==FINISHED
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'j', 'k', 'l'
      correctAns = $correctkey
      forceEndRoutine = True
      startVal [condition] = fix.status==FINISHED
      store = first key
      storeCorrect = True
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  Routine blank
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine the_end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The End
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        print("The End")
  Routine increment_foocount
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if foocount<1:
            foocount+=1
            condition=foo[foocount]
            print("condition is: ",condition)
  Routine assign_spreadsheet
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        trial_list = condition
  Routine say_stuff
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        print("hello")
  Routine write_response
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        thisExp.addData("response", response.keys)
  Routine increment_condition
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    CodeComponent increment1
      Code Type = Py
      Begin Routine:
        condition_number = condition_number + 1
        condition = order_of_conditions[condition_number]
        print("This condition is: " + condition)
        thisExp.addData("condition", condition)
  Routine feedback_put
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    CodeComponent skipper
      Code Type = Py
      Each Frame:
        if condition_number > 0:
            continueRoutine = False
    TextComponent put_feedback_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine assign_correctkey
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    CodeComponent say_what_correctkey_is
      Code Type = Py
      Begin Routine:
        correctkey = "oops"
        if mapping_number == 1:
            if correctresponse == "redself":
                correctkey = 'j'
            if correctresponse == "bluefriend":
                correctkey = 'k'
            if correctresponse == "greenother":
                correctkey = 'l'
        if mapping_number == 2:
            if correctresponse == "redself":
                correctkey = 'j'
            if correctresponse == "bluefriend":
                correctkey = 'l'
            if correctresponse == "greenother":
                correctkey = 'k'
        if mapping_number == 3:
            if correctresponse == "redself":
                correctkey = 'k'
            if correctresponse == "bluefriend":
                correctkey = 'j'
            if correctresponse == "greenother":
                correctkey = 'l'
        if mapping_number == 4:
            if correctresponse == "redself":
                correctkey = 'k'
            if correctresponse == "bluefriend":
                correctkey = 'l'
            if correctresponse == "greenother":
                correctkey = 'j'
        if mapping_number == 5:
            if correctresponse == "redself":
                correctkey = 'l'
            if correctresponse == "bluefriend":
                correctkey = 'j'
            if correctresponse == "greenother":
                correctkey = 'k'
        if mapping_number == 6:
            if correctresponse == "redself":
                correctkey = 'l'
            if correctresponse == "bluefriend":
                correctkey = 'k'
            if correctresponse == "greenother":
                correctkey = 'j'
        thisExp.addData("correctkey", correctkey)
  Routine handover
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    CodeComponent code_hover
      Code Type = Py
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      Begin Routine:
        inittext = "There will be some practice trials with feedback, followed by some experimental trials without feedback. Press space when you are ready to continue."
        halfwaytext = "You have finished the practice trials. Press space when you are ready for the experimental trials"
        hovertext = "oops"
        if condition_number == 0:
            hovertext = inittext
        if condition_number == 1:
            continueRoutine = False
        if condition_number == 2:
            hovertext = halfwaytext
        if condition_number == 3:
            continueRoutine = False
    TextComponent text_hover
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $hovertext
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    KeyboardComponent key_hover
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent assign_or_skip_feedback
      Code Type = Py
      Begin Routine:
        feedback_text = "oops"
        if response.corr == 1:
            feedback_text = "Correct"
        if response.corr == 0:
            feedback_text = "wrong"
        print(task, word, color, font_variable, feedback_text, "actual response was ", response.keys, "correct anwser was ", correctkey)
        if condition_number >= 2:
            continueRoutine = False
    TextComponent put_feedback
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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Flow
  Routine preliminaries
  Routine keymap_test
  Routine font_selection_test
  Routine welcome
  Routine pp_names_names
  LoopInitiator conditions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine increment_condition
    Routine handover
    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition
      loopType = random
      nReps = 1
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      Routine assign_correctkey
      Routine stimulus
      Routine feedback
      Routine blank
    LoopTerminator trials
  LoopTerminator conditions
  Routine the_end
